PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = image_test
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Routines
  Routine trial
    ImageComponent left_image
      image = /Users/taiping/Workspace/statespace/neuroimage/psychopy/spatialgeometry/media/Town01_ClearNoon/0_4_qestion1.jpg
      pos = (-0.46, 0)
      size = (0.86, 0.51)
      startVal [time (s)] = 0.0
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    ImageComponent right_image
      image = /Users/taiping/Workspace/statespace/neuroimage/psychopy/spatialgeometry/media/Town01_ClearNoon/0_4_qestion1.jpg
      pos = (0.46, 0)
      size = (0.86, 0.51)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
