PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '001', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 720]
  expName = spatial geometry
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Routines
  Routine screenshots
    ImageComponent screenshots_img
      image [set every repeat] = $screenshots_image
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine wait_scan_start_key
    KeyboardComponent wait_scan_start
      allowedKeys = '5','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent wait_scan_start_txt
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = The video is about to start……
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  Routine show_exp_videos
    MovieComponent show_single_video
      backend = vlc
      forceEndRoutine = False
      movie [set every repeat] = $"videos/"+str(town_name)+"_"+str(weather_name)+"/"+str(video_name)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $video_duration
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    TextComponent show_current_town_weather
      letterHeight = 0.03
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $video_duration
      text [set every repeat] = $"Town:"+str(town_name)+",Weather:"+str(weather_name)+",Video:"+str(video_name)
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    ImageComponent image_question_for_know_or_not
      image [set every repeat] = videos/Town01_ClearNoon/question_1.png
      size = (1.8, 1)
      startVal [condition] = $show_single_video.status==FINISHED
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_question_for_know_or_not
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [condition] = $show_single_video.status==FINISHED
      stopVal [duration (s)] = 5
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Flow
  LoopInitiator loop_screenshots loopType="TrialHandler"
    conditionsFile = screenshots/screenshots_conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'screenshots_image': 'screenshots_01.jpeg'},
      {'screenshots_image': 'screenshots_02.jpeg'},
      {'screenshots_image': 'screenshots_03.jpeg'},
      {'screenshots_image': 'screenshots_04.jpeg'},
      {'screenshots_image': 'screenshots_05.jpeg'},
      {'screenshots_image': 'screenshots_06.jpeg'},
      {'screenshots_image': 'screenshots_07.jpeg'},
      {'screenshots_image': 'screenshots_08.jpeg'}]
    Routine screenshots
  LoopTerminator loop_screenshots
  Routine wait_scan_start_key
  LoopInitiator loop_town loopType="TrialHandler"
    Selected rows = $np.random.choice(2, size=1, replace=False)
    conditionsFile = videos/show_town_video_conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'town_name': 'Town01'},
      {'town_name': 'Town07'}]
    LoopInitiator loop_weather loopType="TrialHandler"
      Selected rows = $np.random.choice(2, size=1, replace=False)
      conditionsFile = videos/show_weather_video_conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'weather_name': 'ClearNoon'},
        {'weather_name': 'ClearSunset'}]
      LoopInitiator loop_single_video loopType="TrialHandler"
        conditionsFile = videos/show_single_video_conditions.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'video_name': '0_4.mp4', 'video_duration': 240, 'question_image': 'question_1.png'},
          {'video_name': '4_7.mp4', 'video_duration': 180, 'question_image': 'question_2.png'},
          {'video_name': '7_10.mp4', 'video_duration': 180, 'question_image': 'question_3.png'}]
        Routine show_exp_videos
      LoopTerminator loop_single_video
    LoopTerminator loop_weather
  LoopTerminator loop_town
