PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 800]
  expName = spatial geometry
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Routines
  Routine show_single_r
    MovieComponent show_single_video
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $"media/"+str(town_weather_name)+"/"+str(video_name)+".mp4"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $video_duration
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    TextComponent show_current_town_weather
      disabled = True
      letterHeight = 0.03
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $video_duration
      text [set every repeat] = $"Town_Weather:"+str(town_weather_name)+",Video:"+str(video_name)
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  Routine q_r
    ImageComponent left_image_question_for_know_or_not
      image [set every repeat] = $"media/"+str(left_town_weather_name)+"/"+str(video_name)+"_"+str(left_image_name)+".jpg"
      pos = (-0.46, 0)
      size = (0.86, 0.51)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    ImageComponent right_image_question_for_know_or_not
      image [set every repeat] = $"media/"+str(right_town_weather_name)+"/"+str(video_name)+"_"+str(right_image_name)+".jpg"
      pos = (0.46, 0)
      size = (0.86, 0.51)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_question_for_know_or_not
      allowedKeys = 'left','right'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      storeCorrect = True
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    TextComponent txt_question_for_know_or_not
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Which scene have you NOT seen?
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    ImageComponent left_arrow_image
      image = media/question_left_arrow.png
      pos = (-0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent right_arrow_image
      image = media/question_right_arrow.png
      pos = (0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent code_for_add_green_square
      Code Type = Py
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      Begin Routine:
        image_answer_green_square.size=(0.0, 0.0)
      Each Frame:
        if key_question_for_know_or_not.status == STARTED:

            if (key_question_for_know_or_not.keys == 'left'):
                image_answer_green_square.pos=(-0.5, 0.4)
                image_answer_green_square.size=(0.22, 0.22)
                image_answer_green_square.setImage("media/green_square.png")

            elif (key_question_for_know_or_not.keys == 'right'):
                image_answer_green_square.pos=(0.5, 0.4)
                image_answer_green_square.size=(0.22, 0.22)
                image_answer_green_square.setImage("media/green_square.png")
    ImageComponent image_answer_green_square
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine a_r
    ImageComponent image_answer_for_know_or_not
      size = (0.86, 0.51)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent txt_answer_for_know_or_not
      color = red
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent code_answer_know_or_not
      Code Type = Py
      Begin Routine:
        if (key_question_for_know_or_not.keys == str('None')) or (key_question_for_know_or_not.keys == None):
            txt_answer_for_know_or_not.text = "You did not press the key!"
            txt_answer_for_know_or_not.color = "red"
            image_answer_for_know_or_not.size=(0.6, 0.6)
            image_answer_for_know_or_not.setImage("media/no_symbol.png")
        else:
            image_answer_for_know_or_not.size=(0.86, 0.51)
            if str(correct_answer) == 'left':
                image_answer_for_know_or_not.setImage("media/"+str(left_town_weather_name)+"/"+str(video_name)+"_"+str(left_image_name)+".jpg")
            elif str(correct_answer) == 'right':
                image_answer_for_know_or_not.setImage("media/"+str(right_town_weather_name)+"/"+str(video_name)+"_"+str(right_image_name)+".jpg")

            if (key_question_for_know_or_not.keys == str(correct_answer)) or (key_question_for_know_or_not.keys == correct_answer):
                key_question_for_know_or_not.corr = 1
                txt_answer_for_know_or_not.text = "Correct!"
                txt_answer_for_know_or_not.color = "green"
                txt_answer_for_know_or_not.height = 0.08
            else:
                key_question_for_know_or_not.corr = 0
                txt_answer_for_know_or_not.text = "Wrong!"
                txt_answer_for_know_or_not.color = "red"
                txt_answer_for_know_or_not.height = 0.08
  Routine fix_cross_r_6
    PolygonComponent fixation_cross_6s
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine fix_cross_r_05
    PolygonComponent fixation_cross_05
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine fix_cross_r_10
    PolygonComponent fixation_cross_10
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine wait_for_start
    TextComponent wait_for_start_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The experiment demo is about to start…
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    KeyboardComponent wait_for_start_key
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine the_end
    TextComponent the_end_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press space key to end this demo.
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    KeyboardComponent the_end_key
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_r
    ImageComponent instruction_img
      image [set every repeat] = $'instruction/instruction_' + str(current_instruction) + '.png'
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction_key
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_for_instruction
      Code Type = Py
      Begin Experiment:
        current_instruction = 1
      Each Frame:
        if instruction_key.keys == 'left' and current_instruction > 1:
            current_instruction = current_instruction - 1
        elif instruction_key.keys == 'right':
            current_instruction = current_instruction + 1

        if current_instruction == 9: # pressed 'right' on the last instructions
            loop_instruction_r.finished = True
            continueRoutine = False

        if current_instruction < 9: # pressed 'right' on the last instructions
            str_instruction_img = 'instruction/instruction_' + str(current_instruction) + '.png'
            instruction_img.setImage(str_instruction_img)
  Routine fix_cross_r_4
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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Flow
  LoopInitiator loop_instruction_r loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine instruction_r
  LoopTerminator loop_instruction_r
  Routine wait_for_start
  Routine fix_cross_r_4
  LoopInitiator loop_videos loopType="TrialHandler"
    conditionsFile = media/show_group_conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'town_weather_name': 'Town01_ClearSunset'},
      {'town_weather_name': 'Town07_ClearSunset'},
      {'town_weather_name': 'Town01_ClearNoon'},
      {'town_weather_name': 'Town07_ClearNoon'}]
    LoopInitiator loop_clips loopType="TrialHandler"
      conditionsFile = media/show_clips_conditions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'video_name': 'clip_0_4', 'video_duration': 24},
        {'video_name': 'clip_4_7', 'video_duration': 18},
        {'video_name': 'clip_7_10', 'video_duration': 18}]
      Routine show_single_r
      Routine fix_cross_r_6
      LoopInitiator loop_questions loopType="TrialHandler"
        conditionsFile = $"media/"+str(town_weather_name)+"/question_conditions.xlsx"
        loopType = sequential
        nReps = 1
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        Routine q_r
        Routine a_r
        Routine fix_cross_r_05
      LoopTerminator loop_questions
      Routine fix_cross_r_10
    LoopTerminator loop_clips
  LoopTerminator loop_videos
  Routine the_end
