PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '00', 'run': '00'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = spatial geometry
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Routines
  Routine q_r
    ImageComponent left_image_question_for_know_or_not
      pos = (-0.46, 0)
      size = (0.86, 0.51)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9
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    ImageComponent right_image_question_for_know_or_not
      pos = (0.46, 0)
      size = (0.86, 0.51)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
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    KeyboardComponent key_question_for_know_or_not
      allowedKeys = 'left','right','1','4'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9
      storeCorrect = True
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    TextComponent txt_question_for_know_or_not
      font = Noto Serif JP
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
      text = 見たことのないシーンは？
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    ImageComponent left_arrow_image
      image = media/pic/question_left_arrow.png
      pos = (-0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
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    ImageComponent right_arrow_image
      image = media/pic/question_right_arrow.png
      pos = (0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
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    CodeComponent code_for_add_green_square
      Code Type = Py
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      Begin Routine:
        image_answer_green_square.size=(0.0, 0.0)

        #-- set left and right image
        video_question_dict = {
          "clip0_q1": "rgb_002000.jpg",
          "clip0_q2": "rgb_004000.jpg",
          "clip1_q1": "rgb_008000.jpg",
          "clip1_q2": "rgb_010000.jpg",
          "clip2_q1": "rgb_014000.jpg",
          "clip2_q2": "rgb_016000.jpg",
        }

        # random choose left or right as a correct image, 0 for left, 1 for right
        rand_binary = np.random.randint(2, size=1)[0]
        current_video_img=str(video_name)+"_"+str(question_name)
        correct_img_str="media/question_images/"+str(town_weather_name)+"/"+str(video_question_dict[current_video_img])

        # random choose compared image from other towns except current town
        current_town_num=town_weather_name.split("_")[0].split("n")[1]
        current_weather=town_weather_name.split("_")[1]
        town_index_list = [1, 2, 3, 4, 5, 6, 7, 8]
        town_name_list = ["Town01","Town02","Town03","Town04","Town05","Town06","Town07","Town10HD"]
        compared_town_num = np.random.choice([ele for ele in town_index_list if ele != int(current_town_num)])
        compared_town_weather_name = str(town_name_list[compared_town_num-1])+"_"+str(current_weather)
        compared_img_str = "media/question_images/"+str(compared_town_weather_name)+"/"+str(video_question_dict[current_video_img])

        # display image
        if rand_binary == 0: # 0 for left as correct
            correct_answer='left'
            correct_num='1'
            left_image_question_for_know_or_not.setImage(correct_img_str)
            right_image_question_for_know_or_not.setImage(compared_img_str)
        elif rand_binary == 1: # 1 for right as correct
            correct_answer='right'
            correct_num='4'
            left_image_question_for_know_or_not.setImage(compared_img_str)
            right_image_question_for_know_or_not.setImage(correct_img_str)
      Each Frame:
        # detect the key press
        if key_question_for_know_or_not.status == STARTED:

            if (key_question_for_know_or_not.keys == 'left' or key_question_for_know_or_not.keys == '1'):
                image_answer_green_square.pos=(-0.5, 0.4)
                image_answer_green_square.size=(0.22, 0.22)
                image_answer_green_square.setImage("media/pic/green_square.png")

            elif (key_question_for_know_or_not.keys == 'right' or key_question_for_know_or_not.keys == '4'):
                image_answer_green_square.pos=(0.5, 0.4)
                image_answer_green_square.size=(0.22, 0.22)
                image_answer_green_square.setImage("media/pic/green_square.png")
    ImageComponent image_answer_green_square
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
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  Routine a_r
    ImageComponent image_answer_for_know_or_not
      size = (0.86, 0.51)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent txt_answer_for_know_or_not
      color = red
      font = Noto Serif JP
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_answer_know_or_not
      Code Type = Py
      Begin Routine:
        if (key_question_for_know_or_not.keys == str('None')) or (key_question_for_know_or_not.keys == None):
        #    txt_answer_for_know_or_not.text = "You did not press the key!"
            txt_answer_for_know_or_not.text = "キーを押さなかった!"
            txt_answer_for_know_or_not.color = "red"
            image_answer_for_know_or_not.size=(0.6, 0.6)
            image_answer_for_know_or_not.setImage("media/pic/no_symbol.png")
            thisExp.addData('show_single_clip_answer', "none")

        else:
            image_answer_for_know_or_not.size=(0.86, 0.51)
        #    if str(correct_answer) == 'left':
        #        image_answer_for_know_or_not.setImage(correct_img_str)
        #    elif str(correct_answer) == 'right':
        #        image_answer_for_know_or_not.setImage(correct_img_str)
            image_answer_for_know_or_not.setImage(compared_img_str)

            if (key_question_for_know_or_not.keys == str(correct_answer) or key_question_for_know_or_not.keys == str(correct_num)):
                key_question_for_know_or_not.corr = 0
        #        txt_answer_for_know_or_not.text = "Wrong!"
                txt_answer_for_know_or_not.text = "間違い!"
                txt_answer_for_know_or_not.color = "red"
                txt_answer_for_know_or_not.height = 0.08
                thisExp.addData('show_single_clip_answer', "wrong")
            else:
                key_question_for_know_or_not.corr = 1
        #        txt_answer_for_know_or_not.text = "Correct!"
                txt_answer_for_know_or_not.text = "正しい!"
                txt_answer_for_know_or_not.color = "green"
                txt_answer_for_know_or_not.height = 0.08
                thisExp.addData('show_single_clip_answer', "correct")
  Routine wait_for_start
    TextComponent wait_for_start_txt
      font = Noto Serif JP
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 実験デモがもうすぐ始まります...
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    KeyboardComponent wait_for_start_key
      allowedKeys = '5','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent wait_for_start_code
      Code Type = Py
      Begin Routine:
        thisExp.addData('wait_for_start_begin_routine', core.monotonicClock.getTime())
        win.mouseVisible = False
      End Routine:
        thisExp.addData('wait_for_start_end_routine', core.monotonicClock.getTime())
  Routine the_end
    TextComponent the_end_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press space key to end this demo.
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    KeyboardComponent the_end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_r
    ImageComponent instruction_img
      image [set every repeat] = $'instruction/instruction_' + str(current_instruction) + '.png'
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction_key
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_for_instruction
      Code Type = Py
      Begin Experiment:
        current_instruction = 5
      Each Frame:
        if instruction_key.keys == 'left' and current_instruction > 1:
            current_instruction = current_instruction - 1
        elif instruction_key.keys == 'right':
            current_instruction = current_instruction + 1

        if current_instruction == 9: # pressed 'right' on the last instructions
            loop_instruction_r.finished = True
            continueRoutine = False

        if current_instruction < 9: # pressed 'right' on the last instructions
            str_instruction_img = 'instruction/instruction_' + str(current_instruction) + '.png'
            instruction_img.setImage(str_instruction_img)
  Routine fix_cross_r_iq
    PolygonComponent fix_cross_question
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine fix_cross_r_scan
    PolygonComponent fix_cross_before_scan
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine fix_cross_r_bq
    PolygonComponent fix_cross_before_question
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine fix_cross_r_aq
    PolygonComponent fix_cross_after_question
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine show_single_clip_r
    MovieComponent show_single_clip
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $"media/videos/"+str(town_weather_name)+"/"+str(town_weather_name)+"_"+str(video_name)+".mp4"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $video_duration
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    TextComponent show_current_town_weather
      disabled = True
      letterHeight = 0.03
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $video_duration
      text [set every repeat] = $"Town_Weather:"+str(town_weather_name)+",Video:"+str(video_name)
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    CodeComponent show_single_clip_code
      Code Type = Py
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      Begin Routine:
        thisExp.addData('show_single_clip_begin_routine', core.monotonicClock.getTime())
      End Routine:
        thisExp.addData('show_single_clip_end_routine', core.monotonicClock.getTime())
Flow
  LoopInitiator loop_instruction_r loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine instruction_r
  LoopTerminator loop_instruction_r
  Routine wait_for_start
  Routine fix_cross_r_scan
  LoopInitiator loop_videos loopType="TrialHandler"
    Selected rows = $[int(expInfo['run'])]
    conditionsFile = $"conditions/groups/"+str(expInfo['participant'])+".xlsx"
    loopType = sequential
    nReps = 1
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    LoopInitiator loop_clips loopType="TrialHandler"
      conditionsFile = conditions/show_clips_demo_conditions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'video_name': 'clip0', 'video_duration': 12},
        {'video_name': 'clip1', 'video_duration': 12},
        {'video_name': 'clip2', 'video_duration': 12}]
      Routine show_single_clip_r
      Routine fix_cross_r_bq
      LoopInitiator loop_questions loopType="TrialHandler"
        conditionsFile = conditions/question_conditions.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'question': 'q1'},
          {'question': 'q2'}]
        Routine q_r
        Routine a_r
        Routine fix_cross_r_iq
      LoopTerminator loop_questions
      Routine fix_cross_r_aq
    LoopTerminator loop_clips
  LoopTerminator loop_videos
  Routine the_end
